begintemplate OLM

public soma, dend2, dend4, dend3, dend1, dend7, dend8, dend6, dend5


create soma[9], dend2[6], dend4[22], dend3[2], dend1[20], dend7[10], dend8[11]
create dend6[3], dend5
forall {Ra = 150}


proc init() {

	topol()
	memb()
}

forall{nseg=L/10+1}

proc topol() { local i
  connect soma[1](0), soma[0](0)
  for i = 2, 8 connect soma[i](0), soma[i-2](1)
  connect dend2(0), soma[0](0)
  for i = 1, 2 connect dend2[i](0), dend2[i-1](1)
  connect dend2[3](0), dend2[1](1)
  for i = 4, 5 connect dend2[i](0), dend2[3](1)
  connect dend4(0), soma(1)
  for i = 1, 2 connect dend4[i](0), dend4(1)
  for i = 3, 4 connect dend4[i](0), dend4[1](1)
  for i = 5, 6 connect dend4[i](0), dend4[2](1)
  for i = 7, 8 connect dend4[i](0), dend4[3](1)
  for i = 9, 10 connect dend4[i](0), dend4[4](1)
  for i = 11, 12 connect dend4[i](0), dend4[6](1)
  for i = 13, 14 connect dend4[i](0), dend4[7](1)
  for i = 15, 16 connect dend4[i](0), dend4[10](1)
  for i = 17, 18 connect dend4[i](0), dend4[11](1)
  for i = 19, 20 connect dend4[i](0), dend4[12](1)
  connect dend4[21](0), dend4[15](1)
  connect dend3(0), dend2(1)
  connect dend3[1](0), dend3(1)
  connect dend1(0), soma[1](1)
  for i = 1, 2 connect dend1[i](0), dend1(1)
  for i = 3, 4 connect dend1[i](0), dend1[i-2](1)
  for i = 5, 8 connect dend1[i](0), dend1[i-3](1)
  for i = 9, 10 connect dend1[i](0), dend1[i-4](1)
  for i = 11, 12 connect dend1[i](0), dend1[i-1](1)
  for i = 13, 14 connect dend1[i](0), dend1[i-2](1)
  for i = 15, 16 connect dend1[i](0), dend1[i-3](1)
  connect dend1[17](0), dend1[13](1)
  for i = 18, 19 connect dend1[i](0), dend1[15](1)
  connect dend7(0), soma[3](1)
  for i = 1, 2 connect dend7[i](0), dend7[i-1](1)
  for i = 3, 4 connect dend7[i](0), dend7[i-2](1)
  for i = 5, 7 connect dend7[i](0), dend7[2](1)
  for i = 8, 9 connect dend7[i](0), dend7[i-5](1)
  connect dend8(0), soma[8](1)
  for i = 1, 4 connect dend8[i](0), dend8(1)
  connect dend8[5](0), dend8[1](1)
  for i = 6, 7 connect dend8[i](0), dend8[5](1)
  connect dend8[8](0), dend8[6](1)
  for i = 9, 10 connect dend8[i](0), dend8[8](1)
  connect dend6(0), soma[8](1)
  for i = 1, 2 connect dend6[i](0), dend6(1)
  connect dend5(0), soma[8](1)
  basic_shape()
}

proc shape3d_1() {
  soma[0] {pt3dclear()
	pt3dadd(-14, -164, 0, 9.22)
	pt3dadd(-11.08, -164, 0, 9.22)
  }
  dend2 {pt3dclear()
	pt3dadd(-14, -164, 0, 1.07)
	pt3dadd(-16.7235, -158.553, 0, 1.07)
  }
  soma[1] {pt3dclear()
	pt3dadd(-14, -164, 0, 8.03)
	pt3dadd(-16.92, -164, 0, 8.03)
  }
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  }
}

proc basic_shape() {
  shape3d_1()
}

proc memb() {
forall {
	insert ks ek=-90 vhalfp_ks=-35 kp_ks=2 gksbar_ks=0.0008
	insert kamt gbar_kamt=0.004
	insert nax gbar_nax=0.015 sh_nax=15
	insert pas g_pas=1/25000 Ra=150 cm=1
}	
}

endtemplate OLM
